PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Stroop task project
  keyboardBackend = ioHub
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Routines
  Routine Welcome_screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        Press SPACEBAR to begin
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Welcome_screen_2
  Routine Goodbye_screen
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thankyou
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Stroop_task
    TextComponent text_4
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent key_resp_3
      allowedKeys = 'r','g','b','y'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine blank
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine Welcome_screen
  Routine blank
  LoopInitiator trials_stroop loopType="TrialHandler"
    conditionsFile = Stroop task.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'type': 'congruent', 'word': 'RED', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'congruent', 'word': 'BLUE', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'congruent', 'word': 'GREEN', 'colour': 'green', 'correct_key': 'g'},
      {'type': 'congruent', 'word': 'YELLOW', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'RED', 'colour': 'blue', 'correct_key': 'b'},
      {'type': 'incongruent', 'word': 'BLUE', 'colour': 'yellow', 'correct_key': 'y'},
      {'type': 'incongruent', 'word': 'GREEN', 'colour': 'red', 'correct_key': 'r'},
      {'type': 'incongruent', 'word': 'YELLOW', 'colour': 'green', 'correct_key': 'g'}]
    Routine Stroop_task
    Routine blank
  LoopTerminator trials_stroop
  Routine Goodbye_screen
