PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tutorial 5
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $study_word
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine test
    TextComponent text_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $test
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (None, None)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = click to submit 
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    MouseComponent mouse
      clickable = text_3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = study words.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'vase'},
      {'study_word': 'tiger'},
      {'study_word': 'book'},
      {'study_word': 'cushion'},
      {'study_word': 'piano'},
      {'study_word': 'chair'},
      {'study_word': 'fire'},
      {'study_word': 'cotton'},
      {'study_word': 'mobile'},
      {'study_word': 'bottle'},
      {'study_word': 'mango'},
      {'study_word': 'cactus'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = test.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test': '_a_e'},
      {'test': 't_g_r'},
      {'test': '_oo_'},
      {'test': 'c_s_i_n'},
      {'test': '_ia_o'},
      {'test': '_h_i_'},
      {'test': 'f_r_'},
      {'test': '_o_t_n'},
      {'test': '_o_i_e'},
      {'test': 'b_t_l_'},
      {'test': 'm_n_o'},
      {'test': '_a_t_s'},
      {'test': 'c_k_'},
      {'test': 'g_r_e_'},
      {'test': '_oo_l_'},
      {'test': '_i_e'},
      {'test': 'r__k'},
      {'test': 'c_o_d'},
      {'test': 'w_n_o_'}]
    Routine test
  LoopTerminator trials_2
